PsychoPy2experiment version="2026.2.3"
Settings
  Audio lib = ptb
  Data filename = os.path.join('results', '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date']))
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '01', 'dummy_vpixx': False}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = [-1, -1, -1]
  expName = oddball_cued_builder
  frameRate = 120
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine eyelinkSetup
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    CodeComponent elConfig
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # elConfig  |  "Begin Routine" tab  |  routine: eyelinkSetup
        # ----------------------------------------------------------------------
        # Sets EyeLink sample rate to 500 Hz and writes SESSION_CONFIG into EDF.
        # ======================================================================
        el_tracker = pylink.getEYELINK()

        if not dummy_mode:
            el_tracker.setOfflineMode()
            el_tracker.sendCommand("sample_rate 500")
            el_tracker.sendMessage("SESSION_CONFIG remote_mode sample_rate_500")
    TextComponent elInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Eye tracker setup

        Please keep your head still and look at the screen.

        We will now calibrate the eye tracker: follow the dot with your eyes and look at its centre until it moves.

        (Experimenter: press SPACE to enter Camera Setup.
        Enter = camera image, C = calibrate, V = validate, O = continue to the task.)
    KeyboardComponent key_setup
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = False
      hostAddress = 100.1.1.1
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV13
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetSize = 24
      targetType = picture
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  Routine instruct
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    CodeComponent vpixxSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # vpixxSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as soon as the experiment starts, before the start
        #               dialog appears and before the window opens.
        #
        # WHAT IT DOES: loads VPixx's Python library, pypixxlib.
        #
        # WHAT THE DATAPixx3 DOES IN THIS EXPERIMENT:
        #   The DATAPixx3 is VPixx's box that sits between the stimulus PC and
        #   the projector. Here it has two jobs:
        #     1. MEG TRIGGERS. It reads the colour of the top-left screen pixel
        #        at every screen refresh and sends it to the MEG as a trigger
        #        number ("Pixel Mode"). See triggerSetup.
        #     2. SOUND. It plays the standard and deviant tones from its own
        #        memory, started exactly at a screen refresh, which the PC's
        #        sound card can't do. See toneSetup.
        #
        # WHY THESE COMPONENTS ARE IN THE instruct ROUTINE:
        #   A code component has to live in some routine. The "Experiment" tabs
        #   (Before Experiment, Begin Experiment) run once per session, no
        #   matter which routine they are in.
        #   The four VPixx/sequence components must stay in this order:
        #   vpixxSetup, triggerSetup, toneSetup, sequenceGen. Builder runs their
        #   code top to bottom, and the later ones use names made earlier.
        # ======================================================================

        # ---- Load the VPixx library -----------------------------------------
        # try / except ImportError means: try to load pypixxlib, and if it isn't
        # installed on this computer, carry on without it. The Begin Experiment
        # tab then switches to dummy mode (no DATAPixx3).
        try:
            from pypixxlib import _libdpx as dp
            pypixxlibInstalled = True
        except ImportError:
            dp = None
            pypixxlibInstalled = False

        # "atexit" lets us name a function that must run when the program closes,
        # however it closes (see Begin Experiment).
        import atexit
      Begin Experiment:
        # ======================================================================
        # vpixxSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the start dialog closes and the window
        #               opens, before the first routine starts.
        #
        # WHAT IT DOES:
        #   1. decides between the real DATAPixx3 and dummy mode
        #   2. stops the run if the window is not full screen (unless dummy)
        #   3. connects to the DATAPixx3
        #   4. makes sure the DATAPixx3 is released when the experiment ends
        # ======================================================================

        # ---- 1. Real DATAPixx3 or dummy mode? --------------------------------
        # The "dummy_vpixx" tick box in the start dialog runs the experiment
        # without a DATAPixx3, for testing on any computer: no MEG triggers,
        # and the tones play through PsychoPy instead (not precisely timed).
        DUMMY_VPIXX = str(expInfo['dummy_vpixx']) == 'True'

        # Without pypixxlib we can't talk to a DATAPixx3, so force dummy mode
        # and print a loud warning in the Runner window.
        if not pypixxlibInstalled and not DUMMY_VPIXX:
            logging.warning('pypixxlib is not installed, so dummy_vpixx was turned '
                            'on: NO MEG TRIGGERS, and tones are NOT precisely timed')
            DUMMY_VPIXX = True

        thisExp.addData('dummy_vpixx', DUMMY_VPIXX)

        # ---- 2. Stop if the window is not full screen ------------------------
        # The DATAPixx3 reads the top-left pixel of the whole SCREEN. If our
        # window is smaller than the screen, that pixel belongs to the desktop.
        if not DUMMY_VPIXX and (PILOTING or not win.fullscr):
            message = ('VPixx Pixel Mode triggers need a FULL-SCREEN window in RUN '
                       'mode. Switch Builder from Pilot to Run, or tick dummy_vpixx '
                       'to test without the DATAPixx3.')
            logging.error(message)
            raise RuntimeError(message)

        # ---- 3. Connect to the DATAPixx3 -------------------------------------
        if not DUMMY_VPIXX:
            dp.DPxOpen()                   # connect over USB
            dp.DPxStopAllScheds()          # stop anything an earlier run left playing
            # Pixel Mode OFF for now. EyeLink calibration and the drift check
            # draw their own screens, and their colours must not reach the MEG
            # as triggers. The triggersOn routine switches it on after the
            # drift check.
            dp.DPxDisableDoutPixelMode()
            dp.DPxWriteRegCache()


        # ---- 4. Release the DATAPixx3 when the experiment ends ----------------
        def closeVpixx():
            """Stop sound, switch Pixel Mode off, disconnect."""
            if DUMMY_VPIXX:
                return
            try:
                dp.DPxStopAllScheds()
                dp.DPxDisableDoutPixelMode()
                dp.DPxWriteRegCache()
                dp.DPxClose()
            except Exception:
                pass

        # atexit.register asks Python to run closeVpixx when the program ends.
        atexit.register(closeVpixx)
    CodeComponent triggerSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # triggerSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as soon as the experiment starts, before the
        #               window opens.
        #
        # WHAT IT DOES: defines the trigger colours for this oddball paradigm.
        #
        # HOW PIXEL MODE TRIGGERS WORK (read this first):
        #   Each time the screen refreshes (120 times per second here) the
        #   DATAPixx3 looks at ONE pixel: the very top-left pixel of the screen.
        #   In "Pixel Mode B" it reads that pixel's BLUE value (0 to 255) and
        #   puts it out on 8 digital lines, which are recorded on the MEG
        #   trigger channel. Red and green are ignored, so we keep them at 0.
        #
        #   Each of these blue values switches on exactly ONE of the 8 lines:
        #       1, 2, 4, 8, 16, 32, 64, 128
        #   Blue = 0 (a black pixel) means all lines are off.
        #
        #   So to "send trigger 2" we colour that one pixel (0, 0, 2) for one
        #   frame, then make it black again. The pixel is too dark to see.
        # ======================================================================

        # ---- The trigger colours used in this experiment --------------------
        TRIG_STANDARD    = (0, 0,  1)   # standard tone onset        -> MEG trigger 1
        TRIG_DEVIANT     = (0, 0,  2)   # deviant tone onset         -> MEG trigger 2
        TRIG_BLINK       = (0, 0,  4)   # BLINK cue onset            -> MEG trigger 4
        TRIG_CUE_LEFT    = (0, 0,  8)   # left-hand cue arrows       -> MEG trigger 8
        TRIG_CUE_RIGHT   = (0, 0, 16)   # right-hand cue arrows      -> MEG trigger 16
        TRIG_FEEDBACK    = (0, 0, 32)   # MISS or WRONG BUTTON       -> MEG trigger 32
        TRIG_OFF         = (0, 0,  0)   # black pixel                -> all lines off

        # Unused values on the 8-line channel: 64 and 128. Reserved for future
        # event markers if the paradigm grows.
      Begin Experiment:
        # ======================================================================
        # triggerSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the window opens, straight after vpixxSetup.
        #
        # WHAT IT DOES:
        #   1. creates the 1x1 trigger pixel in the top-left corner
        #   2. defines the functions that colour it, send triggers and read the
        #      DATAPixx3's clock
        #
        # Pixel Mode itself is switched on later, by the triggersOn routine
        # after the drift check, and off on the thanks screen.
        # ======================================================================

        # ---- 1. The trigger pixel --------------------------------------------
        screenWidthPix, screenHeightPix = win.size
        triggerPixel = visual.Rect(
            win,
            units='pix',
            width=1,
            height=1,
            pos=(-screenWidthPix / 2 + 0.5, screenHeightPix / 2 - 0.5),
            colorSpace='rgb255',
            fillColor=TRIG_OFF,
            lineColor=TRIG_OFF,
            lineWidth=0,
            interpolate=False,
            autoLog=False,
        )
        triggerPixel.setAutoDraw(True)


        # ---- 2. Functions used by the other components -----------------------
        def setTriggerPixel(colour):
            """Give the trigger pixel a new colour. Change appears at next refresh."""
            triggerPixel.fillColor = colour
            triggerPixel.lineColor = colour


        # Per-trial VPIXX-clock timestamps, looked up by name, e.g.
        # vpixxTimes['deviant']. trialLog copies them into the trial log.
        vpixxTimes = {}


        def recordVpixxTime(stimName):
            """Save the DATAPixx3's own clock as the column stimName + '_vp'.
            sendTrigger() queues this to run straight after the refresh that
            showed the trigger, so the time marks that refresh."""
            if DUMMY_VPIXX:
                vpixxTimes[stimName] = None
                return
            dp.DPxUpdateRegCache()
            vpixxTimes[stimName] = dp.DPxGetTime()


        def sendTrigger(colour, stimName):
            """Show a trigger colour on the next screen refresh and log it.
            colour   : one of the TRIG_ values, e.g. TRIG_DEVIANT
            stimName : short name, e.g. 'deviant'; the trial log stores its
                       VPIXX-clock timestamp as stimName + '_vp'."""
            setTriggerPixel(colour)
            # win.callOnFlip(function, argument) runs the function straight
            # after the next screen refresh, the one that shows this trigger.
            win.callOnFlip(recordVpixxTime, stimName)
    CodeComponent toneSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # toneSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as soon as the experiment starts, before the
        #               window opens.
        #
        # WHAT IT DOES: sets the tone parameters and makes both tones (standard
        #               and deviant).
        #
        # HOW THE SOUND IS PLAYED (read this first):
        #   The tones are played by the DATAPixx3, not the stimulus PC's sound
        #   card. The DATAPixx3 has its own memory and its own audio output.
        #     1. At the start of the experiment we copy BOTH tones, once, into
        #        the DATAPixx3's memory (Begin Experiment tab).
        #     2. Each tone's trial-time play is set up in tone's trialSetup:
        #        we give the DATAPixx3 an audio schedule saying "play buffer at
        #        standardAddress" or "play buffer at deviantAddress", mono.
        #     3. On the frame the tone should start, we tell it "start", timed
        #        to arrive exactly when the screen refreshes.
        # ======================================================================

        import numpy as np

        # ---- Tone parameters -------------------------------------------------
        standardFreqHz   = 1000         # standard tone pitch (Hz)
        deviantFreqHz    = 1200         # deviant tone pitch (Hz)
        toneDurationSec  = 0.400        # both tones 400 ms
        rampSec          = 0.010        # 10 ms fade-in/out (avoids clicks)
        sampleRate       = 48000        # DATAPixx3 audio sample rate
        toneLoudness     = 0.8          # 0 to 1
        audioVolume      = 0.5          # DATAPixx3 output volume, both ears

        # Buffer addresses in the DATAPixx3's audio RAM. 16,000,000 is the
        # address VPixx uses by default; put the deviant 0.5 MB later.
        standardAddress  = 16_000_000
        deviantAddress   = 16_500_000


        def _make_tone(freqHz, duration_s, ramp_s, sample_rate, loudness):
            """Build an int16 pure tone with cosine fade-in/out."""
            nSamples = int(round(duration_s * sample_rate))
            t = np.arange(nSamples) / sample_rate
            wave = np.sin(2 * np.pi * freqHz * t)
            nRamp = int(round(ramp_s * sample_rate))
            fade = 0.5 * (1 - np.cos(np.pi * np.arange(nRamp) / nRamp))
            wave[:nRamp] = wave[:nRamp] * fade
            wave[-nRamp:] = wave[-nRamp:] * fade[::-1]
            return (wave * loudness * 32767).astype(np.int16)


        standardWave = _make_tone(standardFreqHz, toneDurationSec,
                                  rampSec, sampleRate, toneLoudness)
        deviantWave  = _make_tone(deviantFreqHz,  toneDurationSec,
                                  rampSec, sampleRate, toneLoudness)
      Begin Experiment:
        # ======================================================================
        # toneSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the window opens, straight after vpixxSetup
        #               and triggerSetup.
        #
        # WHAT IT DOES: turns the DATAPixx3's audio on and copies BOTH tones
        #               into its memory. In dummy mode (no DATAPixx3) it
        #               prepares ordinary PsychoPy sounds instead.
        # ======================================================================

        if not DUMMY_VPIXX:
            # ---- Real DATAPixx3 ----------------------------------------------
            dp.DPxInitAudCodec()
            # Device opens at volume 0 (silent) every time, so set it here.
            dp.DPxSetAudLeftVolume(audioVolume)
            dp.DPxSetAudRightVolume(audioVolume)
            dp.DPxWriteRegCache()

            # Copy both tones into memory, each at its own address.
            dp.DPxWriteAudioBuffer(standardWave, standardAddress)
            dp.DPxWriteAudioBuffer(deviantWave,  deviantAddress)
            dp.DPxWriteRegCache()

            logging.exp('DATAPixx3 audio ready: standard %d samples, deviant %d samples'
                        % (len(standardWave), len(deviantWave)))

        else:
            # ---- Dummy mode: use PsychoPy sound instead ----------------------
            # Timing is approximate (OS audio latency); use dummy mode for
            # testing only. Mono sounds, played through the default device.
            standardSound = sound.Sound(standardWave.astype(np.float32) / 32767.0,
                                        sampleRate=sampleRate, stereo=False)
            deviantSound  = sound.Sound(deviantWave.astype(np.float32) / 32767.0,
                                        sampleRate=sampleRate, stereo=False)


        def prep_tone_schedule(kind):
            """Set the DATAPixx3's audio schedule to play one tone (standard
            or deviant) in mono on the next 'start'. Call BEFORE arming
            DPxStartAudSched + DPxWriteRegCacheAfterVideoSync."""
            if DUMMY_VPIXX:
                return
            if kind == 'deviant':
                addr, nSamp = deviantAddress, len(deviantWave)
            else:
                addr, nSamp = standardAddress, len(standardWave)
            # 'mono' sends the buffer to both ears.
            dp.DPxSetAudioSchedule(0.0, sampleRate, nSamp, 'mono', addr)
            dp.DPxWriteRegCache()
    CodeComponent sequenceGen
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # sequenceGen  |  "Begin Routine" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the instructions screen first appears.
        #
        # WHAT IT DOES: generates fresh trial sequences for the training block
        #               and the three main blocks. Each sequence is a list of
        #               trials with cue hand, standard count, and inter-stimulus
        #               intervals pre-drawn. Writes them to CSV files in the
        #               session's data folder; the Builder loops point at those
        #               files for their conditions.
        #
        # WHY HERE (not Begin Experiment):
        #   We need expInfo['participant'] and expInfo['session'] to name the
        #   CSVs. Those are only populated after the start dialog closes, so
        #   this must be a Begin Routine of the first user-facing routine.
        # ======================================================================

        import csv
        import json
        import os
        import random

        # ---- Design parameters (edit here) -----------------------------------
        N_TRAINING_TRIALS   = 20
        N_MAIN_TRIALS       = 100
        N_BLOCKS            = 3
        MIN_STANDARDS       = 3    # min standards before each deviant
        MAX_STANDARDS       = 7    # max standards before each deviant
        ISI_MIN             = 0.700
        ISI_MAX             = 0.900

        # ---- Session results folder ------------------------------------------
        # Builder sets thisExp.dataFileName to the base path for its own output
        # files (no extension). We write our conditions CSVs next to those.
        _results_dir = os.path.dirname(thisExp.dataFileName)
        if _results_dir and not os.path.isdir(_results_dir):
            os.makedirs(_results_dir, exist_ok=True)
        _base_name = os.path.basename(thisExp.dataFileName)


        def _generate_block(n_trials, is_training_flag, seed=None):
            """Make one block's trial list.

            cue_hand is balanced 50/50 and shuffled.
            n_standards is drawn uniformly from [MIN_STANDARDS, MAX_STANDARDS].
            ISIs are drawn uniformly from [ISI_MIN, ISI_MAX], one per standard
            tone (the deviant has none after it).

            is_training_flag is written as a column so trial code can tell
            which outer loop it is in (there are two tone_loops with
            different names, one per outer loop; see tonePresent).
            """
            rng = random.Random(seed)
            half = n_trials // 2
            hands = ['left'] * half + ['right'] * (n_trials - half)
            rng.shuffle(hands)
            trials = []
            for hand in hands:
                n_std = rng.randint(MIN_STANDARDS, MAX_STANDARDS)
                # One ISI per standard (deviant tone comes last, no ISI after)
                isis = [round(rng.uniform(ISI_MIN, ISI_MAX), 4) for _ in range(n_std)]
                trials.append({
                    'cue_hand':        hand,
                    'expected_button': '1' if hand == 'left' else '2',
                    'n_standards':     n_std,
                    'isis_json':       json.dumps(isis),
                    'is_training':     is_training_flag,
                })
            return trials


        def _write_conditions_csv(path, trials):
            """Write a Builder-compatible conditions CSV."""
            fieldnames = ['cue_hand', 'expected_button', 'n_standards',
                          'isis_json', 'is_training']
            with open(path, 'w', newline='') as f:
                w = csv.DictWriter(f, fieldnames=fieldnames)
                w.writeheader()
                w.writerows(trials)


        # Fresh random seed each session (different subjects get different
        # sequences). The seed is recorded in the data file so a run can be
        # reproduced if needed.
        _session_seed = random.randrange(2**31)
        thisExp.addData('session_seed', _session_seed)
        _seed_rng = random.Random(_session_seed)

        # ---- Training block --------------------------------------------------
        training_csv = os.path.join(_results_dir, _base_name + '_training.csv')
        _write_conditions_csv(training_csv,
                              _generate_block(N_TRAINING_TRIALS,
                                              is_training_flag=True,
                                              seed=_seed_rng.randrange(2**31)))

        # ---- Main blocks: one CSV per block ----------------------------------
        # A list of per-block CSV paths, used by the block loop below.
        block_csvs = []
        for b in range(1, N_BLOCKS + 1):
            path = os.path.join(_results_dir,
                                _base_name + f'_block{b}.csv')
            _write_conditions_csv(path, _generate_block(
                N_MAIN_TRIALS, is_training_flag=False,
                seed=_seed_rng.randrange(2**31)))
            block_csvs.append(path)

        logging.exp(f'Generated conditions: training={training_csv}')
        for i, p in enumerate(block_csvs, 1):
            logging.exp(f'Generated conditions: block {i}={p}')

        # ---- Running counts for progress and summary -------------------------
        overall_trial     = 0        # bumped at the start of every trial
        training_results  = []       # list of outcome strings
        main_results      = []       # list of (block, outcome) tuples
    CodeComponent responseClassifySetup
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # responseClassify  |  "Begin Experiment" tab  |  routine: response_window
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the experiment starts.
        #
        # WHAT IT DOES: creates one Keyboard() object shared across trials.
        #               Keyboard() uses PsychoPy's modern low-latency backend
        #               when available (ptb). We poll it manually in Each Frame
        #               rather than using a KeyboardComponent, because the HID
        #               pipeline on Windows needs the message queue pumped by
        #               win.flip() to notice presses -- a core.wait during the
        #               response window drops events.
        #
        # KEY_CODES: edit here if the button box emits different key names.
        # ======================================================================

        from psychopy.hardware import keyboard

        kb = keyboard.Keyboard()
        kb.clearEvents()

        KEY_CODES = {
            '1': 'left_index',
            '2': 'right_index',
        }
        EXIT_KEY = 'escape'

        # Per-trial event buffer (reset in Begin Routine)
        trial_events = []
    CodeComponent cueSetup
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # cuePresent  |  "Begin Experiment" tab  |  routine: cue
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the window opens.
        #
        # WHAT IT DOES: makes the four cue-arrow TextStims (left-pair and
        #               right-pair, two arrows each). Reused on every trial.
        # ======================================================================

        cue_left_arrows = [
            visual.TextStim(win, text='<', color='white', height=60,
                            pos=(-CUE_ARROW_OFFSET_PX, 0), autoLog=False),
            visual.TextStim(win, text='<', color='white', height=60,
                            pos=(+CUE_ARROW_OFFSET_PX, 0), autoLog=False),
        ]
        cue_right_arrows = [
            visual.TextStim(win, text='>', color='white', height=60,
                            pos=(-CUE_ARROW_OFFSET_PX, 0), autoLog=False),
            visual.TextStim(win, text='>', color='white', height=60,
                            pos=(+CUE_ARROW_OFFSET_PX, 0), autoLog=False),
        ]
    CodeComponent feedbackSetup
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # feedbackSelect  |  "Begin Experiment" tab  |  routine: feedback
        # ----------------------------------------------------------------------
        # Creates the two feedback TextStims. Both red, big, bold.
        # ======================================================================

        feedback_miss_stim = visual.TextStim(
            win, text='MISS', color='red', height=80, bold=True, autoLog=False,
        )
        feedback_wrong_stim = visual.TextStim(
            win, text='WRONG BUTTON', color='red', height=60, bold=True,
            autoLog=False,
        )
    CodeComponent blinkSetup
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # blinkPresent  |  "Begin Experiment" tab  |  routine: blink
        # ----------------------------------------------------------------------
        # Creates the BLINK TextStim. White text, so the subject can see it.
        # ======================================================================

        blink_text_stim = visual.TextStim(
            win, text='BLINK', color='white', height=60, bold=True, autoLog=False,
        )
    CodeComponent breakSetup
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # breakControl  |  "Begin Experiment" tab  |  routine: breakScreen
        # ----------------------------------------------------------------------
        # INTERBLOCK_MIN_REST sets the forced-rest duration before SPACE is
        # accepted (subject gets a real break; experimenter can't rush past).
        # ======================================================================
        INTERBLOCK_MIN_REST = 15.0
    CodeComponent trialTimingSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # trialSetup  |  "Before Experiment" tab  |  routine: trialSetup
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, before the experiment window opens.
        #
        # WHAT IT DOES: sets timing constants for every trial. Edit here to
        #               change the paradigm's phase durations.
        # ======================================================================

        FIXATION_DURATION   = 1.500      # s, fixation cross alone
        CUE_DURATION        = 0.500      # s, arrows flanking fixation
        RESPONSE_WINDOW     = 1.000      # s, fixation-only after last tone
        FEEDBACK_DURATION   = 0.400      # s, MISS or WRONG BUTTON (errors only)
        BLINK_DURATION      = 0.500      # s, 'BLINK' text

        # Response scoring window, in seconds AFTER deviant onset
        RESP_WIN_MIN        = 0.150      # reject anticipatory presses
        TONE_DURATION       = 0.400      # tone itself (needed below)
        RESP_WIN_MAX        = TONE_DURATION + RESPONSE_WINDOW   # 1.400 s

        # Cue arrow geometry
        CUE_ARROW_OFFSET_PX = 50         # distance from fixation to each arrow
    CodeComponent trialLog
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # trialLog  |  "Begin Experiment" tab  |  routine: trialLog
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the experiment starts.
        #
        # WHAT IT DOES: opens three TSV files (one row per trial, one row per
        #               tone, one row per button press). Each row is flushed
        #               to disk after it's written, so a crash doesn't lose
        #               completed trials.
        #
        # COLUMN NAMING CONVENTION (clock provenance):
        #   *_pp        PsychoPy default clock (behavioural RT reference)
        #   *_vp        VPIXX DATAPixx3 hardware clock (MEG alignment reference)
        #   *_vp_est    estimated VPIXX time (derived from a PsychoPy-clock
        #               event via the PP<->VP correspondence sampled at the
        #               nearest flip). Accurate to ~one video frame.
        # ======================================================================

        import csv as _csv

        _log_base = thisExp.dataFileName

        trials_log_path   = _log_base + '_trials_log.tsv'
        tones_log_path    = _log_base + '_tones_log.tsv'
        presses_log_path  = _log_base + '_presses_log.tsv'

        trials_log_columns = [
            'overall_trial', 'block', 'trial_in_block', 'is_training',
            'cue_hand', 'expected_button', 'n_standards',
            'fixation_onset_pp', 'fixation_onset_vp',
            'cue_onset_pp',      'cue_onset_vp',
            'first_tone_onset_pp', 'first_tone_onset_vp',
            'deviant_onset_pp',    'deviant_onset_vp',
            'response_button', 'response_key_name',
            'response_time_pp', 'response_time_vp_est',
            'rt_pp', 'rt_vp_est',
            'outcome', 'feedback_shown',
            'blink_onset_pp', 'blink_onset_vp',
            'dummy_vpixx',
        ]

        tones_log_columns = [
            'overall_trial', 'block', 'trial_in_block', 'tone_index',
            'kind', 'frequency_hz', 'onset_pp', 'onset_vp',
        ]

        presses_log_columns = [
            'overall_trial', 'block', 'label', 'key_name',
            'time_pp', 'time_vp_est',
        ]

        _trials_log_fh  = open(trials_log_path,  'w', newline='')
        _tones_log_fh   = open(tones_log_path,   'w', newline='')
        _presses_log_fh = open(presses_log_path, 'w', newline='')

        trials_log_writer  = _csv.DictWriter(_trials_log_fh,  fieldnames=trials_log_columns,
                                             delimiter='\t')
        tones_log_writer   = _csv.DictWriter(_tones_log_fh,   fieldnames=tones_log_columns,
                                             delimiter='\t')
        presses_log_writer = _csv.DictWriter(_presses_log_fh, fieldnames=presses_log_columns,
                                             delimiter='\t')

        trials_log_writer.writeheader()
        tones_log_writer.writeheader()
        presses_log_writer.writeheader()

        for _fh in (_trials_log_fh, _tones_log_fh, _presses_log_fh):
            _fh.flush()

        # In-memory per-trial collectors. tone and response routines append
        # here; trialLog writes them out at End Routine.
        tones_log_rows   = []
        presses_log_rows = []

        # Default values used by trialLog's End Routine
        block_label      = 'training'   # overwritten in the main block loop
        trial_in_block   = 0            # overwritten in each loop

        # Close the files when the program ends.
        import atexit as _atexit_log


        def _close_logs():
            for _fh in (_trials_log_fh, _tones_log_fh, _presses_log_fh):
                try:
                    _fh.close()
                except Exception:
                    pass


        _atexit_log.register(_close_logs)
    CodeComponent taskStartMsg
      Code Type = Py
      End Routine:
        # ======================================================================
        # taskStartMsg  |  "End Routine" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: when the experimenter presses SPACE to leave the
        #               instructions screen.
        #
        # WHAT IT DOES: writes TASK_START into the eye-tracking data file (EDF)
        #               so the start of the task is easy to find in analysis.
        # ======================================================================
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_START')
    TextComponent taskInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        You will hear a series of tones.

        On each trial an arrow cue appears:
            <  <   = LEFT hand          >  >   = RIGHT hand

        After the cue you will hear several identical tones,
        followed by ONE different (higher) tone.

        As soon as you hear the DIFFERENT tone,
        press the INDEX FINGER button on the cued hand
        as quickly as possible.

        If you miss or press the wrong button, you'll see feedback.

        When 'BLINK' appears, you have half a second to blink.
        Otherwise please try not to blink and hold your gaze on the cross.

        Experimenter: press SPACE to start the training block.
    KeyboardComponent ready
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine eyelinkDriftCheck
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine triggersOn
    RoutineSettingsComponent triggersOn
      desc = Switches VPixx Pixel Mode B on after the drift check
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    CodeComponent pixelModeOn
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # pixelModeOn  |  "Begin Routine" tab  |  routine: triggersOn
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, straight after the drift check, before the first
        #               trial.
        #
        # WHAT IT DOES: switches the DATAPixx3's Pixel Mode B on. From now on
        #               the top-left pixel's blue value goes to the MEG trigger
        #               lines on every screen refresh.
        # ======================================================================
        setTriggerPixel(TRIG_OFF)            # start with the pixel black

        if not DUMMY_VPIXX:
            dp.DPxEnableDoutPixelModeB()
            dp.DPxWriteRegCache()
            logging.exp('VPixx Pixel Mode B ON')
  Routine trialSetup
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    CodeComponent trialSetupCode
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # trialSetup  |  "Begin Routine" tab  |  routine: trialSetup
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of every trial, after Builder has set the
        #               row's columns as local variables (cue_hand,
        #               expected_button, n_standards, isis_json).
        #
        # WHAT IT DOES:
        #   1. parses this trial's ISI list
        #   2. sets the tone_loop's nReps so it iterates n_standards + 1 times
        #   3. figures out whether this is a training or main trial
        #   4. clears per-trial state carried in triggerSetup's vpixxTimes dict
        # ======================================================================

        import json

        # ---- 1. Parse the per-tone ISI list ---------------------------------
        # isis_json is a JSON-encoded list of length n_standards (one gap after
        # each standard; the deviant has no gap after it, it's the last tone).
        isi_list = json.loads(isis_json)

        # ---- 2. Set tone_loop iteration count -------------------------------
        # tone_loop reads this each time it starts (before its first iteration)
        # because its nReps field is $tone_loop_reps. n_standards is the number
        # of standards BEFORE the deviant; +1 adds the deviant itself.
        tone_loop_reps = int(n_standards) + 1

        # ---- 3. Training vs main --------------------------------------------
        # `is_training` comes in as a column of the conditions CSV: True in
        # the training CSV, False in the three block CSVs. Builder loads it
        # as a local variable for each trial. Convert to a real bool in case
        # Builder keeps it as the string 'True'/'False'.
        is_training = str(is_training) == 'True'

        # ---- 4. Fresh per-trial state ---------------------------------------
        vpixxTimes.clear()
        tone_index_in_trial = 0          # 0-indexed, bumped before each tone
        first_tone_onset_pp = None
        first_tone_onset_vp = None
        deviant_onset_pp    = None
        deviant_onset_vp    = None

        # Response fields default to 'no press'
        response_button    = ''
        response_key_name  = ''
        response_time_pp   = None
        response_time_vp_est = None
        rt_pp              = float('nan')
        rt_vp_est          = float('nan')
        outcome            = 'miss'
        feedback_shown     = False

        # Running trial counter (incremented in sequenceGen; here we bump it)
        overall_trial += 1
    CodeComponent blockControl
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # blockControl  |  "Begin Routine" tab  |  routine: trialSetup
        # ----------------------------------------------------------------------
        # Sets block_label and trial_in_block for the trialLog based on which
        # outer loop is active (is_training comes from the conditions CSV).
        # ======================================================================
        if is_training:
            block_label    = 'training'
            trial_in_block = training_trials.thisN + 1
        else:
            block_label    = 'block_%d' % (block_loop.thisN + 1)
            trial_in_block = block_trials.thisN + 1
  Routine fixation
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    CodeComponent fixationTriggerClear
      Code Type = Py
      Begin Routine:
        # Clear any lingering trigger pixel.
        setTriggerPixel(TRIG_OFF)
    PolygonComponent fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0
      stopVal [duration (s)] = FIXATION_DURATION
      units = pix
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  Routine cue
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    CodeComponent cuePresent
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # cuePresent  |  "Begin Routine" tab  |  routine: cue
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of every trial's cue phase.
        #
        # WHAT IT DOES: picks the correct arrow pair and sends the cue trigger
        #               on the next refresh. The fixation cross is drawn by the
        #               fixation PolygonComponent in this routine.
        # ======================================================================

        if cue_hand == 'left':
            cue_arrows_to_draw = cue_left_arrows
            sendTrigger(TRIG_CUE_LEFT, 'cue')
        else:
            cue_arrows_to_draw = cue_right_arrows
            sendTrigger(TRIG_CUE_RIGHT, 'cue')
      Each Frame:
        # ======================================================================
        # cuePresent  |  "Each Frame" tab  |  routine: cue
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: every frame during the cue (~60 frames at 120 Hz over
        #               500 ms).
        #
        # WHAT IT DOES: draws the two cue arrows on top of the fixation cross.
        #               The trigger pixel we coloured in Begin Routine goes
        #               black again on frame 2 (one-frame trigger).
        # ======================================================================

        # Draw arrows every frame while the cue routine is active
        for a in cue_arrows_to_draw:
            a.draw()

        # After the first frame (where sendTrigger armed the pixel), set it
        # back to OFF so the trigger is one frame long.
        if frameN >= 1:
            setTriggerPixel(TRIG_OFF)
      End Routine:
        # ======================================================================
        # cuePresent  |  "End Routine" tab  |  routine: cue
        # ----------------------------------------------------------------------
        # Save when the cue appeared (PsychoPy clock) for the trial log.
        # ======================================================================
        cue_onset_pp = cue.tStartRefresh
    PolygonComponent cue_fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0
      stopVal [duration (s)] = CUE_DURATION
      units = pix
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  Routine tone
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    CodeComponent tonePresent
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # tonePresent  |  "Begin Routine" tab  |  routine: tone
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once at the start of every tone (standard or deviant),
        #               inside tone_loop.
        #
        # WHAT IT DOES: configures the audio schedule and sends the right
        #               trigger. The actual "start audio" command is in Each
        #               Frame, on the frame tone first draws, so that audio
        #               and trigger-pixel land on the same vsync.
        #
        # WHERE THE NAMES COME FROM:
        #   tone_loop_training / tone_loop_main - Builder: there are two
        #     separate tone loops (one inside each outer loop) with different
        #     names, so we pick the one that's actually iterating based on the
        #     is_training flag from the conditions CSV.
        #   tone_loop_reps  - trialSetup: n_standards + 1.
        #   prep_tone_schedule, dummySounds - toneSetup.
        #   dp, DUMMY_VPIXX - vpixxSetup.
        # ======================================================================

        _active_tone_loop = tone_loop_training if is_training else tone_loop_main
        tone_index_in_trial = _active_tone_loop.thisN   # 0, 1, 2, ..., n_standards
        is_deviant = (tone_index_in_trial == tone_loop_reps - 1)
        kind = 'deviant' if is_deviant else 'standard'

        # ---- Prep the audio schedule ---------------------------------------
        # This loads config onto the device but does NOT start it. The start
        # command goes out in Each Frame, synced to the first flip.
        prep_tone_schedule(kind)

        # ---- Set the trigger colour for this tone --------------------------
        if is_deviant:
            sendTrigger(TRIG_DEVIANT, 'tone_%d' % (tone_index_in_trial + 1))
        else:
            sendTrigger(TRIG_STANDARD, 'tone_%d' % (tone_index_in_trial + 1))

        # For dummy mode (no DATAPixx3), queue the PsychoPy sound to play on
        # the next flip.
        if DUMMY_VPIXX:
            _dummy_stim = deviantSound if is_deviant else standardSound
            _dummy_stim.stop()
            win.callOnFlip(_dummy_stim.play)

        # One-flag so Each Frame fires the DATAPixx3 "start" exactly once.
        tone_audio_started = False

        # This tone's PsychoPy clock onset, filled in Each Frame after the flip.
        tone_onset_pp_this = None
      Each Frame:
        # ======================================================================
        # tonePresent  |  "Each Frame" tab  |  routine: tone
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: every frame during this tone's routine (~48 frames at
        #               120 Hz for a 400 ms tone).
        #
        # WHAT IT DOES:
        #   - On frame 0 (just BEFORE the first screen refresh): arms the
        #     DATAPixx3 to start the audio schedule at that refresh. Nothing
        #     may call DPxUpdateRegCache or DPxWriteRegCache between here and
        #     the refresh, or the pending start will be erased.
        #   - On frame 1 (after the first refresh): clears the trigger pixel
        #     so the trigger lasts exactly one frame.
        #   - Records this tone's VPIXX-clock onset into tone_onset_pp_this.
        # ======================================================================

        if not tone_audio_started and frameN == 0:
            if not DUMMY_VPIXX:
                # IMPORTANT: must be the LAST VPixx commands before the next
                # win.flip(). Anything that calls DPxUpdateRegCache or
                # DPxWriteRegCache between here and the refresh would clobber
                # the pending start.
                dp.DPxStartAudSched()
                dp.DPxWriteRegCacheAfterVideoSync()
            tone_audio_started = True

        # One frame after the trigger pixel was coloured, blank it so the
        # trigger is one frame long (~8.3 ms at 120 Hz).
        if frameN >= 1:
            setTriggerPixel(TRIG_OFF)
      End Routine:
        # ======================================================================
        # tonePresent  |  "End Routine" tab  |  routine: tone
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the end of each tone's routine, after its full
        #               (tone + ISI) duration.
        #
        # WHAT IT DOES:
        #   - captures this tone's PsychoPy and VPIXX onset times
        #   - stores first-tone and deviant timestamps for the trial log
        #   - appends one row per tone to the per-tone log file
        # ======================================================================

        tone_onset_pp_this = tone.tStartRefresh
        tone_onset_vp_this = vpixxTimes.get('tone_%d' % (tone_index_in_trial + 1))

        if tone_index_in_trial == 0:
            first_tone_onset_pp = tone_onset_pp_this
            first_tone_onset_vp = tone_onset_vp_this

        if is_deviant:
            deviant_onset_pp = tone_onset_pp_this
            deviant_onset_vp = tone_onset_vp_this

        tones_log_rows.append({
            'overall_trial':  overall_trial,
            'block':          block_label,
            'trial_in_block': trial_in_block,
            'tone_index':     tone_index_in_trial + 1,
            'kind':           kind,
            'frequency_hz':   deviantFreqHz if is_deviant else standardFreqHz,
            'onset_pp':       '%.6f' % tone_onset_pp_this,
            'onset_vp':       '' if tone_onset_vp_this is None else '%.6f' % tone_onset_vp_this,
        })
    PolygonComponent tone_fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0
      stopVal [duration (s)] = TONE_DURATION + (isi_list[tone_index_in_trial] if tone_index_in_trial < len(isi_list) else 0.0)
      units = pix
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  Routine response_window
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    CodeComponent responseClassify
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # responseClassify  |  "Begin Routine" tab  |  routine: response_window
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of the 1 s response window after the
        #               deviant tone.
        #
        # WHAT IT DOES: resets the per-trial event buffer and clears any stale
        #               keys from the keyboard. The scoring window boundaries
        #               are set relative to the deviant onset captured in the
        #               tone loop.
        # ======================================================================

        trial_events = []
        kb.clearEvents()

        # Scoring window boundaries (PsychoPy clock, from the deviant onset)
        if deviant_onset_pp is None:
            # Shouldn't happen but be safe
            resp_min_pp = float('inf')
            resp_max_pp = float('inf')
        else:
            resp_min_pp = deviant_onset_pp + RESP_WIN_MIN
            resp_max_pp = deviant_onset_pp + RESP_WIN_MAX
      Each Frame:
        # ======================================================================
        # responseClassify  |  "Each Frame" tab  |  routine: response_window
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: every frame of the 1 s response window (~120 polls).
        #
        # WHAT IT DOES: drains new keyboard events into trial_events, tagged
        #               with an estimated VPIXX-clock time (frame_vp + delta).
        #               Keeps the trigger pixel black.
        # ======================================================================

        setTriggerPixel(TRIG_OFF)

        # Sample both clocks at this flip; use them to convert press times
        # (PsychoPy clock) into estimated VPIXX-clock time.
        if not DUMMY_VPIXX:
            dp.DPxUpdateRegCache()
            frame_vp = dp.DPxGetTime()
        else:
            frame_vp = 0.0
        frame_pp = globalClock.getTime() if 'globalClock' in dir() else core.getTime()

        keyList = list(KEY_CODES.keys()) + [EXIT_KEY]
        new_keys = kb.getKeys(keyList=keyList, waitRelease=False)
        for key in new_keys:
            if key.name == EXIT_KEY:
                # Abort: let the routine end; main-flow abort would be a bigger
                # change. For now we just end the routine.
                continueRoutine = False
                break
            label = KEY_CODES.get(key.name)
            if label is None:
                continue
            trial_events.append({
                'kind':        'press',
                'label':       label,
                'key_name':    key.name,
                'time_pp':     key.tDown,
                'time_vp_est': frame_vp + (key.tDown - frame_pp),
            })
      End Routine:
        # ======================================================================
        # responseClassify  |  "End Routine" tab  |  routine: response_window
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: when the 1 s window ends (either normally or on abort).
        #
        # WHAT IT DOES: classifies the first in-window press as the response;
        #               sets outcome, response fields, rt_pp, rt_vp_est; logs
        #               every event to presses_log_rows.
        # ======================================================================

        # Classify: first press whose time_pp falls in [resp_min_pp, resp_max_pp]
        for ev in trial_events:
            if resp_min_pp <= ev['time_pp'] <= resp_max_pp:
                response_button    = ev['label']
                response_key_name  = ev['key_name']
                response_time_pp   = ev['time_pp']
                response_time_vp_est = ev['time_vp_est']
                rt_pp = response_time_pp - deviant_onset_pp
                if deviant_onset_vp is not None and ev['time_vp_est'] is not None:
                    rt_vp_est = response_time_vp_est - deviant_onset_vp
                outcome = ('correct' if response_button == {'left': 'left_index',
                                                             'right': 'right_index'}[cue_hand]
                           else 'wrong_button')
                break   # first in-window press defines the response

        # Log every detected event to the presses CSV (not just the scored one)
        for ev in trial_events:
            presses_log_rows.append({
                'overall_trial': overall_trial,
                'block':         block_label,
                'label':         ev['label'],
                'key_name':      ev['key_name'],
                'time_pp':       '%.6f' % ev['time_pp'],
                'time_vp_est':   '' if ev['time_vp_est'] is None
                                    else '%.6f' % ev['time_vp_est'],
            })
    PolygonComponent response_fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0
      stopVal [duration (s)] = RESPONSE_WINDOW
      units = pix
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  Routine feedback
    RoutineSettingsComponent feedback
      skipIf = outcome == 'correct'
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    CodeComponent feedbackSelect
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # feedbackSelect  |  "Begin Routine" tab  |  routine: feedback
        # ----------------------------------------------------------------------
        # This routine's skipIf field is $outcome == 'correct', so this code
        # only runs when the subject missed or pressed the wrong button.
        # ======================================================================

        if outcome == 'miss':
            feedback_stim_to_draw = feedback_miss_stim
        else:  # wrong_button
            feedback_stim_to_draw = feedback_wrong_stim

        sendTrigger(TRIG_FEEDBACK, 'feedback')
        feedback_shown = True
      Each Frame:
        # Draw the feedback text each frame; clear the trigger after 1 frame.
        feedback_stim_to_draw.draw()
        if frameN >= 1:
            setTriggerPixel(TRIG_OFF)
    PolygonComponent feedback_fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0
      stopVal [duration (s)] = FEEDBACK_DURATION
      units = pix
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  Routine blink
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    CodeComponent blinkPresent
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # blinkPresent  |  "Begin Routine" tab  |  routine: blink
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once at the start of each trial's BLINK phase.
        #
        # WHAT IT DOES: sends the BLINK trigger. Text is drawn each frame.
        # ======================================================================
        sendTrigger(TRIG_BLINK, 'blink')
      Each Frame:
        blink_text_stim.draw()
        if frameN >= 1:
            setTriggerPixel(TRIG_OFF)
      End Routine:
        # Save the BLINK onset for the trial log.
        blink_onset_pp = blink.tStartRefresh
        blink_onset_vp = vpixxTimes.get('blink')
  Routine trialLog
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    CodeComponent trialLogWrite
      Code Type = Py
      End Routine:
        # ======================================================================
        # trialLog  |  "End Routine" tab  |  routine: trialLog
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the end of every trial, after all other routines.
        #
        # WHAT IT DOES: writes one trial row, N tone rows, M press rows, and
        #               flushes to disk so a crash doesn't lose completed trials.
        # ======================================================================


        def _fmt_pp(val, p=6):
            return '' if val is None else ('%.*f' % (p, val))


        def _fmt_vp(val, p=6):
            # Blank in dummy mode (vpixxTimes stores None then anyway)
            if DUMMY_VPIXX or val is None:
                return ''
            return '%.*f' % (p, val)


        _fixation_pp = fixation.tStartRefresh if hasattr(fixation, 'tStartRefresh') else None
        _fixation_vp = vpixxTimes.get('fixation')

        trials_log_writer.writerow({
            'overall_trial':        overall_trial,
            'block':                block_label,
            'trial_in_block':       trial_in_block,
            'is_training':          is_training,
            'cue_hand':             cue_hand,
            'expected_button':      expected_button,
            'n_standards':          n_standards,
            'fixation_onset_pp':    _fmt_pp(_fixation_pp),
            'fixation_onset_vp':    _fmt_vp(_fixation_vp),
            'cue_onset_pp':         _fmt_pp(cue_onset_pp),
            'cue_onset_vp':         _fmt_vp(vpixxTimes.get('cue')),
            'first_tone_onset_pp':  _fmt_pp(first_tone_onset_pp),
            'first_tone_onset_vp':  _fmt_vp(first_tone_onset_vp),
            'deviant_onset_pp':     _fmt_pp(deviant_onset_pp),
            'deviant_onset_vp':     _fmt_vp(deviant_onset_vp),
            'response_button':      response_button,
            'response_key_name':    response_key_name,
            'response_time_pp':     _fmt_pp(response_time_pp),
            'response_time_vp_est': _fmt_vp(response_time_vp_est),
            'rt_pp':                '' if (rt_pp != rt_pp) else '%.4f' % rt_pp,
            'rt_vp_est':            '' if (DUMMY_VPIXX or rt_vp_est != rt_vp_est) else '%.4f' % rt_vp_est,
            'outcome':              outcome,
            'feedback_shown':       feedback_shown,
            'blink_onset_pp':       _fmt_pp(blink_onset_pp),
            'blink_onset_vp':       _fmt_vp(blink_onset_vp),
            'dummy_vpixx':          DUMMY_VPIXX,
        })

        for row in tones_log_rows:
            tones_log_writer.writerow(row)
        tones_log_rows.clear()

        for row in presses_log_rows:
            presses_log_writer.writerow(row)
        presses_log_rows.clear()

        # Keep running tallies for the end-of-experiment summary
        if is_training:
            training_results.append(outcome)
        else:
            main_results.append((block_label, outcome))

        # Flush to disk after every trial (crash-safe)
        for _fh in (_trials_log_fh, _tones_log_fh, _presses_log_fh):
            _fh.flush()
  Routine trainingTransition
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    CodeComponent trainingTransitionText
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # trainingTransitionText  |  "Begin Routine" tab  |  routine: trainingTransition
        # ----------------------------------------------------------------------
        # Build the text with training accuracy, so the experimenter can decide
        # whether to repeat training. The text component in this routine shows
        # this string.
        # ======================================================================

        _n_training = len(training_results)
        _n_correct  = sum(1 for o in training_results if o == 'correct')
        _pct = 100.0 * _n_correct / _n_training if _n_training > 0 else 0.0

        transition_text = (
            'Training complete.\n\n'
            'Correct: %d/%d (%.1f%%)\n\n'
            'The main experiment will now begin.\n\n'
            'Experimenter: press SPACE to start the main experiment.'
        ) % (_n_correct, _n_training, _pct)
    TextComponent transitionDisplay
      letterHeight = 36
      startVal [time (s)] = 0
      text = $transition_text
      units = pix
      wrapWidth = 1500
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    KeyboardComponent transitionGo
      allowedKeys = "space","escape"
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine eyelinkDriftCheck_post_training
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine breakScreen
    RoutineSettingsComponent breakScreen
      skipIf = block_loop.thisN >= block_loop.nReps - 1
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    CodeComponent breakControl
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # breakControl  |  "Begin Routine" tab  |  routine: breakScreen
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of each between-block break.
        #
        # WHAT IT DOES: computes block-accuracy summary; sets the state
        #               machine (countdown vs. waiting-for-SPACE); clears the
        #               keyboard buffer. Each Frame drives the display updates
        #               and ends the routine on SPACE.
        # ======================================================================

        _block_done = block_loop.thisN + 1
        _this_block = [o for (b, o) in main_results if b == 'block_%d' % _block_done]
        _n_trials   = len(_this_block)
        _n_correct  = sum(1 for o in _this_block if o == 'correct')
        _pct        = 100.0 * _n_correct / _n_trials if _n_trials > 0 else 0.0

        break_remaining = INTERBLOCK_MIN_REST
        break_space_ok  = False
        _break_clock    = core.Clock()
        _last_second    = -1

        break_header = 'Block %d of 3 complete.' % _block_done
        break_summary = 'Correct: %d/%d (%.1f%%)' % (_n_correct, _n_trials, _pct)

        kb.clearEvents()
      Each Frame:
        # ======================================================================
        # breakControl  |  "Each Frame" tab  |  routine: breakScreen
        # ----------------------------------------------------------------------
        # Countdown then SPACE wait. ESC also ends the routine (and the
        # experiment, via the outer flow).
        # ======================================================================

        elapsed = _break_clock.getTime()
        break_remaining = max(0.0, INTERBLOCK_MIN_REST - elapsed)

        if break_remaining > 0:
            # Still counting down
            break_space_ok = False
            break_footer = 'Experimenter: SPACE available in %.0f s' % break_remaining
        else:
            # Open the SPACE gate
            break_space_ok = True
            break_footer = 'Experimenter: press SPACE to continue'

        # Build the message the breakText TextComponent renders ($break_message)
        break_message = (break_header + '\n\n'
                         + break_summary + '\n\n'
                         + 'Rest for a moment.\nPlease stay still.\n\n'
                         + break_footer)

        # Poll keyboard (kb, not event module; see Coder-script history for why)
        pressed = kb.getKeys(keyList=['space', 'escape'], waitRelease=False)
        for k in pressed:
            if k.name == 'escape':
                print('[break] ESC pressed during break for block %d' % _block_done)
                continueRoutine = False
                core.quit()                # also leave the whole flow
            elif k.name == 'space' and break_space_ok:
                continueRoutine = False
                break
    TextComponent breakText
      letterHeight = 36
      startVal [time (s)] = 0
      text = $break_message
      units = pix
      wrapWidth = 1500
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  Routine eyelinkDriftCheck_between_blocks
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine thanks
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    CodeComponent pixelModeOff
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # pixelModeOff  |  "Begin Routine" tab  |  routine: thanks
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the final 'thank you' screen appears.
        #
        # WHAT IT DOES: switches Pixel Mode off, so nothing drawn from here on
        #               (including the EyeLink file-copy screens) reaches the
        #               MEG as a trigger.
        # ======================================================================
        setTriggerPixel(TRIG_OFF)

        if not DUMMY_VPIXX:
            dp.DPxDisableDoutPixelMode()
            dp.DPxWriteRegCache()
            logging.exp('VPixx Pixel Mode B OFF')
    CodeComponent taskEndMsg
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # taskEndMsg  |  "Begin Routine" tab  |  routine: thanks
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the final 'thank you' screen appears.
        #
        # WHAT IT DOES: writes TASK_END into the EDF to mark the end of the task.
        # ======================================================================
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_END')
    TextComponent endScreen
      letterHeight = 36
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
      wrapWidth = 1500
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      text:
        All done - thank you!

        Please stay still while we save the data.
Flow
  Routine eyelinkSetup
  Routine instruct
  Routine eyelinkDriftCheck
  Routine triggersOn
  LoopInitiator training_trials loopType="TrialHandler"
    conditionsFile = $training_csv
    loopType = random
    nReps = 1
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    Routine trialSetup
    Routine fixation
    Routine cue
    LoopInitiator tone_loop_training loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $tone_loop_reps
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      Routine tone
    LoopTerminator tone_loop_training
    Routine response_window
    Routine feedback
    Routine blink
    Routine trialLog
  LoopTerminator training_trials
  Routine trainingTransition
  Routine eyelinkDriftCheck_post_training
  LoopInitiator block_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    LoopInitiator block_trials loopType="TrialHandler"
      conditionsFile = $block_csvs[block_loop.thisN]
      loopType = random
      nReps = 1
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      Routine trialSetup
      Routine fixation
      Routine cue
      LoopInitiator tone_loop_main loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = $tone_loop_reps
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        Routine tone
      LoopTerminator tone_loop_main
      Routine response_window
      Routine feedback
      Routine blink
      Routine trialLog
    LoopTerminator block_trials
    Routine breakScreen
    Routine eyelinkDriftCheck_between_blocks
  LoopTerminator block_loop
  Routine thanks
